PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = SIGDET
  Units = use prefs
  Screen = 1
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Routines
  Routine Instructions_3
    TextComponent text_2
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.080
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      text:
        Now, let's take a practice run. You will see a fixation cross, "+", on the screen.  You should always focus your attention on the fixation cross as this will help you identify the mouth as quickly and accurately as possible.  The fixation cross will be followed by a face with a BIG or a LITTLE mouth. Remember, if you think the mouth is [VStimType], press the 'v' key.  If you think the mouth is [MStimType], press the 'm' key.



        If you understand these directions and are ready to proceed to the practice round, please press a button.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    TextComponent crosshair
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent Eyes_nose_only
      stopVal [duration (s)] = 2
      startVal [time (s)] = 1
      image = caras\eyes_nose_only.bmp
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    ImageComponent Stimulis
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1.5
      image [set every repeat] = $Stim
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    KeyboardComponent res
      correctAns = $corAns
      storeCorrect = True
      stopVal [duration (s)] = .5
      forceEndRoutine = True
      allowedKeys = 'm', 'v'
      startVal [time (s)] = 1.6
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    ImageComponent Eyes_nose_only2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 2.4
      image = caras\eyes_nose_only.bmp
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    CodeComponent code
      Begin Routine:
        #if resp.corr:
        #    msg="Correct! You won 5 cents!"
        #else:
        #    msg="Incorrect! You won nothing!"
  Routine feedback
    CodeComponent code_2
      Begin Experiment:
        expClock = core.Clock()
      Begin Routine:
        msg = "Thanks for participating - that took %.2f minutes in total" %(expClock.getTime()/60.0)
    TextComponent feedback_text
      text [set every repeat] = $msg
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instructions2
    TextComponent Instrucciones
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.080
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      text:
        In this experiment you will be presented with either a face with a BIG mouth, or a face with a LITTLE mouth.  You will see them one at a time.

        Your task will be to decide whether a BIG or LITTLE mouth was presented by pushing the correct button as quickly and accurately as possible.

         The 'v' key will be used to identify the [VStimType] mouth and the 'm' key will be used to identify the [MStimType] mouth.  Examples of what the mouth sizes look like are below:
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent LongMouth
      pos = (-.5,-.6)
      startVal [time (s)] = 0.0
      image = caras\long_mouth.bmp
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    ImageComponent SmallMouth
      pos = (.5,-.6)
      startVal [time (s)] = 0.0
      image = caras\short_mouth.bmp
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    TextComponent BigM
      text = Big Mouth 'v'
      pos = (-10,-9)
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent LittleM
      text = Little Mouth 'm'
      pos = (.5,-.8)
      startVal [time (s)] = 0.0
      letterHeight = .09
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    TextComponent Continue
      text = Please press a button  to continue.
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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  Routine Instructions1
    TextComponent Instructions
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the computer portion of this experiment.

        Please position your index fingers on the "v" and "m" keys as you will only be using these buttons for this experiment.


        The computer portion of this experiment lasts approximately 15 minutes and is composed of 3 blocks separated by brief breaks.
    KeyboardComponent End
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent Cont
      text = Please press a button  to continue.
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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Flow
  Routine Instructions1
  Routine Instructions2
  Routine Instructions_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SIGDETExample.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'corAns': u'v', u'Stim': u'C:\\Users\\Martha\\Desktop\\Nadia\\cursos\\Instrumentos\\ProyectoFinal\\Psychopy\\SIGDET\\caras\\long_mouth.bmp'},
      {u'corAns': u'm', u'Stim': u'C:\\Users\\Martha\\Desktop\\Nadia\\cursos\\Instrumentos\\ProyectoFinal\\Psychopy\\SIGDET\\caras\\short_mouth.bmp'}]
    Routine Practice
  LoopTerminator trials
  Routine feedback
