PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  expName = sidget
  logging level = warning
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine cruz_2
    TextComponent text_5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          if cara == 'caras/long_mouth.bmp':
            msg="Correcto! Esa fue boca grande!"
          else:
            msg="Correcto! Esa fue boca chica!"
        else:
          if cara == 'caras/short_mouth.bmp':
            msg="Incorrecto! Esa fue boca chica!"
          else:
            msg="Incorrecto! Esa fue boca grande!"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine InstructionFinal
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.080
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      text:
        Ahora, vamos a manejar una práctica. Verás una cara fijada en el centro de la pantalla. Debes enfocar tu atención siempre en el centro ya que esto te ayudará a identificar la boca lo más rápido y preciso posible. Recuerda, si piensas que la boca es [VStimType], presiona la tecla “v”. Si piensas que la boca es [MStimType], presiona la tecla “m”.

        Si entiendes estas direcciones y estás listo para proceder a practicar una ronda, por favor presiona cualquier tecla.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine puntos
    CodeComponent code_3
      Begin Experiment:
        totalPoints=0
  Routine trial
    ImageComponent image_2
      pos = (-0.0081, -0.01)
      startVal [time (s)] = 0.5
      image = caras/eyes_nose_only.bmp
      size = (0.5, 0.5)
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'v', 'm'
      startVal [time (s)] = 1.25
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    ImageComponent image
      pos = (-0.0081, -0.01)
      startVal [time (s)] = 1.25
      image [set every repeat] = $cara
      size = (0.5, 0.5)
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    TextComponent cruz
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Para algunas pruebas, una identificación correcta va a resultar en un punto.  Puedes tener 32 puntos en total que resultaran en 10 puntos extras en tu calificación.

        Presiona la Tecla de espacio para ver cómo se va a ver esto.
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine puntos_3
    CodeComponent code_4
      Begin Experiment:
        totalPoints = 0
  Routine Instruct3
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Ahora estamos listos para empezar el experimento. Si tienes alguna pregunta, por favor pregunta al experimentador ahora.

        Recuerda, enfoca tu atención en el centro antes de cada prueba.



        Por favor presiona un botón para empezar.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    CodeComponent code_2
      Begin Experiment:
        msg="Esto es el final de este experimento!\n Muchas Gracias!"
    TextComponent thanksText
      color = $[1, 1, 1]
      text = $msg
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        En este experimento se te presentara ya sea una cara con boca grande o una cara con una boca chica. Las veras uno a la vez.

        Tu tarea será decidir si entre una boca grande o chica  se presentó pulsando el botón correcto lo más rápido y preciso que sea posible.

        La tecla “v” se usara para identificar la boca [VStimType]  y la tecla “m” se utilizara para identificar la boca [MStimType]. Ejemplos de cómo es el tamaño de la boca son a continuación:
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent long
      pos = (-.5,-.6)
      startVal [time (s)] = 0.0
      image = caras/long_mouth.bmp
      size = (0.5, 0.5)
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    ImageComponent short
      pos = (.5,-.6)
      startVal [time (s)] = 0.0
      image = caras/short_mouth.bmp
      size = (0.5, 0.5)
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    TextComponent BigM
      text = Boca grande 'v'
      pos = (-10,-9)
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent SmallM
      text = Boca chica 'm'
      pos = (.5,-.8)
      startVal [time (s)] = 0.0
      letterHeight = .09
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    TextComponent Continue
      text = Por favor presiona cualquier tecla para continuar...
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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  Routine Instruct2
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        No todas las respuestas correctas van a recibir un premio. Al final del experimento se te dará la cantidad de puntos que acumulaste. Entre más identificaciones correctas haces, más dinero te llevaras.

        Por favor presiona cualquier para continuar.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback2
    CodeComponent code
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          totalPoints += 1
          msg="Correcto! Ganaste un punto! Total=%d" %(totalPoints)
        else:
          msg=""
    TextComponent retro
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Bienvenido a la parte de la computadora de este experimento

        Por favor posiciona tus dedos índices en las teclas “v” y “m” ya que solo utilizaras estos botones para este experimento.

        La parte de la computadora en este experimento dura aproximadamente 15 minutos y está compuesto por tres bloques separados por breves pausas.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine puntos_3
  Routine Instructions
  Routine instructPractice
  Routine InstructionFinal
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  Routine Instruct2
  Routine Instruct3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
    Routine feedback2
  LoopTerminator trials
  Routine thanks
